PsychoPy2experiment version="1.78.01"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Experiment info = {'participant':'', 'version':'A'}
  Save excel file = True
  Save wide csv file = False
  Save psydat file = False
  expName = transfer
  Units = use prefs
  Saved data folder = /Users/Shared/vending/data/
  Screen = 1
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Routines
  Routine test
    PatchComponent CStest
      stopVal [duration (s)] = $Dur
      durationEstim = 6
      mask = none
      sf = none
      phase = 0
      ori [set every frame] = $tilt
      startVal [time (s)] = 0.0
      image [set every repeat] = $Condition
      size = [1.5, 2]
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    CodeComponent checkKeys
      Each Frame:
        if tilt > 0:
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']):
         pressL = pressL+1
         tilt = -15

        if event.getKeys(['v']):
         pressR=pressR+1
         tilt = 15
      Begin Routine:
        pressL = 0.0
        pressR = 0.0
      End Routine:
        #save data
        trials.addData('pressL', pressL)
        trials.addData('pressR', pressR)
        logging.flush()
  Routine feedback
    TextComponent text
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
              Thankyou!

        Stage 3 completed
  Routine instr
    CodeComponent init
      Begin Experiment:
        tilt=0
        pressL = 0.0
        pressR = 0.0
    TextComponent test_trigger
      wrapWidth = 0.9
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        Now you have found one of the new machines. At random intervals we will overstock it with a different snack. You will be able to get snacks by tilting the machine and the amount earned will be recorded to eat later.

        However, no snacks will appear on the screen.

        Remember what you have learned and try to steal as many snacks as you want.


                    Press space to begin
    KeyboardComponent trigger_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = transfer.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'Onset': 0, u'Dur': 6, u'Condition': u'red.png'},
      {u'Onset': 4, u'Dur': 8, u'Condition': u'vend.png'},
      {u'Onset': 10, u'Dur': 6, u'Condition': u'yellow.png'},
      {u'Onset': 21, u'Dur': 8, u'Condition': u'vend.png'},
      {u'Onset': 27, u'Dur': 6, u'Condition': u'green.png'},
      {u'Onset': 43, u'Dur': 9, u'Condition': u'vend.png'},
      {u'Onset': 49, u'Dur': 6, u'Condition': u'blue.png'},
      {u'Onset': 58, u'Dur': 12, u'Condition': u'vend.png'},
      {u'Onset': 64, u'Dur': 6, u'Condition': u'red.png'},
      {u'Onset': 76, u'Dur': 12, u'Condition': u'vend.png'},
      {u'Onset': 82, u'Dur': 6, u'Condition': u'blue.png'},
      {u'Onset': 94, u'Dur': 15, u'Condition': u'vend.png'},
      {u'Onset': 100, u'Dur': 6, u'Condition': u'yellow.png'},
      {u'Onset': 115, u'Dur': 9, u'Condition': u'vend.png'},
      {u'Onset': 121, u'Dur': 6, u'Condition': u'green.png'},
      {u'Onset': 130, u'Dur': 13, u'Condition': u'vend.png'},
      {u'Onset': 136, u'Dur': 6, u'Condition': u'red.png'},
      {u'Onset': 149, u'Dur': 16, u'Condition': u'vend.png'},
      {u'Onset': 155, u'Dur': 6, u'Condition': u'green.png'},
      {u'Onset': 171, u'Dur': 13, u'Condition': u'vend.png'},
      {u'Onset': 177, u'Dur': 6, u'Condition': u'blue.png'},
      {u'Onset': 190, u'Dur': 10, u'Condition': u'vend.png'},
      {u'Onset': 196, u'Dur': 6, u'Condition': u'yellow.png'},
      {u'Onset': 206, u'Dur': 11, u'Condition': u'vend.png'},
      {u'Onset': 212, u'Dur': 6, u'Condition': u'green.png'},
      {u'Onset': 223, u'Dur': 10, u'Condition': u'vend.png'},
      {u'Onset': 229, u'Dur': 6, u'Condition': u'red.png'},
      {u'Onset': 239, u'Dur': 10, u'Condition': u'vend.png'}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
    Routine test
  LoopTerminator trials
  Routine feedback
